load_file("nrngui.hoc")
load_file("LAcells_template_LFP_segconsider_all_Iinject_recordingimembrane.hoc")
load_file("interneuron_template_gj_LFP_Iinject_recordingimembrane.hoc")
//load_file("shockcondi.hoc")
//load_file("shocknocondi.hoc")
load_file("BgGen.hoc")
//load_file("function_ToneGen.hoc")
load_file("function_NetStimOR.hoc")
//load_file("function_ToneSignalGen_Th.hoc")
//load_file("function_ToneSignalGen_Ctx.hoc")
load_file("function_LoadMatrix.hoc")
//load_file("function_calcconduc.hoc")
{load_file("netparmpi.hoc")}

//strdef sim_type
//sim_type="trough"    ///change simulation type here


upscale=1
NCELL = 1000*upscale
TotalCellNum = 1000*upscale
CellNum_p=900*upscale//800
CellNum_interneuron = 100*upscale//200

///p_cell morphology///
adend_L_p=270 //um
nseg_adend_p=8 //num of seg 
pdend_L_p=555  //um
nseg_pdend_p=7
nseg_soma_p=1
diam_soma_p = 25 //um
diam_soma_p1 = 24.75 //um
diam_adend_p = 3 
diam_pdend_p = 5 

nseg_all_p=nseg_adend_p+nseg_pdend_p+nseg_soma_p

modelcompartment_num=nseg_all_p

////I_cell morphology////
dend_L_I=150  ///um
nseg_dend_I=1  ///num of seg 
nseg_soma_I=1 
diam_soma_I = 15   ////um
diam_dend_I = 10     ////um
nseg_all_I=nseg_dend_I+nseg_soma_I
modelcompartment_num_ITN=nseg_all_I

diam_shank = 25    //20-50um
extralimit = 50

objref pc,cells,cell[TotalCellNum],nc,nil//,r
pc = new ParallelContext()

cells = new List()


CellNum = 1000*upscale
celsius = 31.0  

objref Sim_length_file
objref Sim_length_rec
Sim_length_file = new File()
Sim_length_file.ropen("./input/sim_length")
Sim_length_rec = new Vector()
Sim_length_rec.scanf(Sim_length_file)

/*objref pulses_file
objref pulses_rec
pulses_file = new File()
pulses_file.ropen("./input/pulses.txt")  ///reminder: first value is for runnum
pulses_rec = new Vector()
pulses_rec.scanf(pulses_file)
if (strcmp(sim_type,"trough")==0) {
type_ind=0
} else if (strcmp(sim_type,"peak")==0) {
type_ind=runnum
}
*/
randomburst_num=2000       
runnum=2//
detect_phase_type=2    ///1-trough,2-peak,3-random
pulse_num_desire=1
  
  
//pulse_num_desire_all=6//define how many maximum pulses for detecting 

tstop = 600//Sim_length_rec.x[0]//96000//10000//276000//5000//276000
_triggertime=500 ///to indicate pulses will be triggered beyond this point
/* if (tstop>5000) {
savingspikesep=1   ///to indicate whether need to store spks seperately
}else{
savingspikesep=1   ///to indicate whether need to store spks seperately
} */


if (pc.id==0) {
{load_file("function_TimeMonitor.hoc")}
}  ///only report on the first node

dt = (1/2)^5//0.05//0.05//0.2//0.01

steps_per_ms= 1/dt//20//20

v_init = -70
//t0 = startsw()
//r = new Random()
/*strdef FileLocationStr_InternalSynConns
FileLocationStr_InternalSynConns = "Syn_Matrix.txt"

strdef FileLocationStr_InternalWgtConns,FileLocationStr_InternalDelConns
FileLocationStr_InternalWgtConns = "Data_InternalWgtConns.txt"
FileLocationStr_InternalDelConns = "Data_InternalDelConns.txt"
*/


//strdef gj_matrix

//gj_matrix = "gj_matrix.txt"
//////////////////////// Choose the cell type & cells applied Neuromodulation/////////////////////

strdef preface, dirstr
preface = "."

sprint(dirstr, "", preface)


//// Read Cell_type.txt ////
objref Cell_type_file
objref Cell_type_rec
Cell_type_file = new File()
Cell_type_file.ropen("./input/Cell_type.txt")
Cell_type_rec = new Vector()
Cell_type_rec.scanf(Cell_type_file)

//// Read NM.txt ////   Randomly choosen number to decide whether cell has DA and NE or not
//objref NM_file
//objref NM_rec
//NM_file = new File()
//NM_file.ropen("./input/NM.txt")
//NM_rec = new Vector()
//NM_rec.scanf(NM_file)

////Read 3D-Location information(soma)////
objref Location
Location = new Matrix()
strdef locationstr
locationstr="./input/location.txt"

Location = LoadMatrix(locationstr,TotalCellNum,3)

/*
////Read 3D-Location oritation(for 2dends)////
objref oritation
oritation = new Matrix()
strdef oritationstr
oritationstr="oritation.txt"

oritation = LoadMatrix(oritationstr,TotalCellNum,3)

////Define electrode position////
XE = 1250 // um    //3D space dimension is 2.5*1*0.6  (1250,500,300)is the oringal pos of electrode
YE = 500
ZE = 2000//300, -1300 for low, 2000 for high   
*/



////load electrode array positions and rotation info of soma for each neuron
objref oritation,elec_coords
oritation = new Matrix()
elec_coords = new Matrix()

strdef oritationstr,elec_coords_str
oritationstr="./input/oritation.txt"
elec_coords_str="./input/elec_coords.txt"

Location.muls(1e3)  //convert to um
oritation = LoadMatrix(oritationstr,TotalCellNum,3)
elec_coords = LoadMatrix(elec_coords_str,1*1*1,3)
load_file("function_calcconduc.hoc")

objref Location_single,oritation_single,elec_single
Location_single = new Vector()
oritation_single = new Vector()
elec_single = new Vector()
sigma=0.3
elec_single=elec_coords.bcopy(0,0,1,3).to_vector()


for(i=pc.id;i<NCELL;i+=pc.nhost) {              // Distribute the cells evenly among nodes

	if (i < CellNum_p){								// LAdd cell ratio A:B:C = 6:3:1
		Cell_type_ind = Cell_type_rec.x[i]	
		if (Cell_type_ind <= 5){
				cell = new Cell_A()
				cell.drv.amp=0.0//P_amp_random.repick()
		}else if(Cell_type_ind <= 8){
				cell = new Cell_B()
				cell.drv.amp=0.0//P_amp_random.repick()
		}else{
				cell = new Cell_C()
				cell.drv.amp=0.0//P_amp_random.repick()
		}
	}else{
		cell = new InterneuronCell()            // Create 200 Interneuron cells (cell 800 ~ cell 999) 
	    cell.drv.amp=0.0//I_amp_random.repick()
	}
	cells.append(cell)                          // Add this cell to the list (otherwise its lost!)
	pc.set_gid2node(i, pc.id)                   // Associate “i?with this node id
												// nc = (create netcon object on cell)
	nc = cell.connect2target(nil) 				// attach spike detector $
	nc.delay = 2
	nc.weight = 1
	pc.cell(i, nc)								// associate gid i with spike detector
												// Associate i with the netcon (so that the cluster 
	 		                                    // knows where the spikes are coming from)													
}

//////////////////////////////////////////////////////////////
//////////////  Connections for LA NET  //////////////////////
//////////////////////////////////////////////////////////////


objref nclist, cellid,bgnclist,Inplist


objref fluc[TotalCellNum][2]

//// Read Cell_list--- list of files whose output,weight changes and ca+ concentration, will be printed ////
	objref op_file
	objref op_rec
	op_file = new File()
	op_file.ropen("./input/Cell_list.txt")
	op_rec = new Vector()
	op_rec.scanf(op_file)
	cell_plots = op_rec.size
    
    

/////////////////////////////////////////////////////////
///////////////Pyramid cells connections/////////////////	
/////////////////////////////////////////////////////////
objref noiseRandObj[TotalCellNum][2]

////////////////////// Single-Point BACKGROUNG noise OR PYRAMIDAL CELLS //////////////////////
proc bg_input_PN () { local randseed
randseed=$1
for m = 0, CellNum_p-1{
    if(!pc.gid_exists(m)) { continue }				// Can't connect to target if it doesn't exist 
													// on the node ("continue") skips rest of code
	//bggen[m] = new BgGen(3,0,tstop,30,dt,m)
	cellid = pc.gid2cell(m)                     	// get GID object from ID	
	///for exc noise///////////////
	noiseRandObj[m][0]=new Random()
    noiseRandObj[m][0].Random123(m+randseed)  //# set lowindex to gid, set highindex to what?   
    noiseRandObj[m][0].normal(0,1)
	
	cellid.soma fluc[m][0] = new Gfluct2_exc(0.5)
    
    //fluc[m][0].std_i = 0.0264//0.0264
    fluc[m][0].g_e0 = 0.0032//0.010//0.015//0.009//0.009//0.009   cannot be too high, otherwise would saturate, same for interneuron
    fluc[m][0].std_e = 0.003//0.002//0.002//0.012		// 4 times larger
    //fluc[m][0].g_i0 = 0.09//0.09
fluc[m][0].setRandObj(noiseRandObj[m][0])

///for inh noise///////////////
	noiseRandObj[m][1]=new Random()
    noiseRandObj[m][1].Random123(m+randseed+TotalCellNum)  //# set lowindex to gid, set highindex to what?   
    noiseRandObj[m][1].normal(0,1)
	
	cellid.soma fluc[m][1] = new Gfluct2_inh(0.5)
    //fluc[m][1].std_e = 0.012//0.012		// 4 times larger   
    //fluc[m][1].g_e0 = 0.009//0.009
    fluc[m][1].g_i0 = 0.021//0.07//0.09//0.09
    fluc[m][1].std_i = 0.008//0.02//0.02//0.02//0.02//0.0264
    fluc[m][1].setRandObj(noiseRandObj[m][1])
	
}
}


obfunc noisegen() { local i localobj rlocal
rlocal = new Random()
i=$1
//j=$2
rlocal.MCellRan4(1000*(i)+1)
rlocal.negexp(1)
return rlocal
}

objref rc_Poisson2E,noise_stim[TotalCellNum],noise_random[TotalCellNum]
objref bg2LAsyn[TotalCellNum],bg2LAcon[TotalCellNum]

////Poission input
proc Poi_input_PN () { local randseed
randseed=$1
   for m = 0, CellNum_p-1{
    if(!pc.gid_exists(m)) { continue }				// Can't connect to target if it doesn't exist 
	cellid = pc.gid2cell(m) 											// on the node ("continue") skips rest of code
	noise_stim[m]= new NetStim(0.9)
	noise_stim[m].start = 0
    noise_stim[m].number = 1e1000//10//5
    
    rc_Poisson2E=new Random(m+randseed)
    Rdm_F = rc_Poisson2E.lognormal(2,1)
    //print Rdm_F
    noise_stim[m].interval = 1000/Rdm_F//50//100
    
    noise_stim[m].noise = 1
    noise_random[m]=noisegen(m)
	noise_stim[m].noiseFromRandom(noise_random[m])

    cellid.dend bg2LAsyn[m] = new bg2pyr(0.9)
    
    
    bg2LAsyn[m].initW = rc_Poisson2E.lognormal(8.5,2)
    
    del=rc_Poisson2E.uniform(0.5,1)
	bg2LAcon[m]= new NetCon(noise_stim[m],bg2LAsyn[m],1,del,1)
    
    }
}

  
////////////////////////////////////////////////////
//////////   Interneuroncell connection  ///////////
////////////////////////////////////////////////////

//////////////////////single point BACKGROUNG fluctuation FOR INTERNEURONS//////////////////////
proc bg_input_ITN () { local randseed
randseed=$1
for m = CellNum_p, TotalCellNum-1{
    if(!pc.gid_exists(m)) { continue }				// Can't connect to target if it doesn't exist 
													// on the node ("continue") skips rest of code		
	//bggen[m] = new BgGen(5,0,tstop,20,dt,m)
	cellid = pc.gid2cell(m)                     	// get GID object from ID	
     ///for exc noise///////////////
	noiseRandObj[m][0]=new Random()
    noiseRandObj[m][0].Random123(m+randseed)  //# set lowindex to gid, set highindex to what?   
    noiseRandObj[m][0].normal(0,1)
	
	cellid.soma fluc[m][0] = new Gfluct2_exc(0.5)
	fluc[m][0].g_e0 = 0.00121//0.005//0.0121//0.4//0.12//0.09//0.009//0.0121
    fluc[m][0].std_e = 0.00012//0.003//0.012//0.012		// 4 times larger
    //fluc[m][0].std_i = 0.0264//0.0264
    
    //fluc[m][0].g_i0 = 0.09//0.09
fluc[m][0].setRandObj(noiseRandObj[m][0])

///for inh noise///////////////
	noiseRandObj[m][1]=new Random()
    noiseRandObj[m][1].Random123(m+randseed+TotalCellNum)  //# set lowindex to gid, set highindex to what?   
    noiseRandObj[m][1].normal(0,1)
	
	cellid.soma fluc[m][1] = new Gfluct2_inh(0.5)
    //fluc[m][1].std_e = 0.012//0.012		// 4 times larger
	fluc[m][1].g_i0 = 0.00573//0.003//0.0573//0.0573
    fluc[m][1].std_i = 0.00264//0.0005//0.0264//0.0264
    //fluc[m][1].g_e0 = 0.009//0.009

fluc[m][1].setRandObj(noiseRandObj[m][1])
}
}
////Poission input

proc Poi_input_ITN () { local randseed
randseed=$1
   for m = CellNum_p, TotalCellNum-1{
    if(!pc.gid_exists(m)) { continue }				// Can't connect to target if it doesn't exist 
	cellid = pc.gid2cell(m) 											// on the node ("continue") skips rest of code
	noise_stim[m]= new NetStim(0.9)
	noise_stim[m].start = 0
    noise_stim[m].number = 1e1000//10//5
    
    rc_Poisson2E=new Random(m+randseed)
    Rdm_F = rc_Poisson2E.lognormal(2,1)
    noise_stim[m].interval = 1000/Rdm_F//50//100
    
    noise_stim[m].noise = 1
    noise_random[m]=noisegen(m)
	noise_stim[m].noiseFromRandom(noise_random[m])

    cellid.dend bg2LAsyn[m] = new bg2pyr(0.9)
    
    
    bg2LAsyn[m].initW = rc_Poisson2E.lognormal(1,0.2)
    
    del=rc_Poisson2E.uniform(0.5,1)
	bg2LAcon[m]= new NetCon(noise_stim[m],bg2LAsyn[m],1,del,1)
    
    }
}
////select cells to inject optogenetic current, for control purposes////
	objref opto_file
	objref opto_rec
	///for group 1 PNs
    opto_file = new File()
	opto_file.ropen("./input/IDs_opto_PNITN.txt")
	opto_rec = new Vector()
	opto_rec.scanf(opto_file)
////////////    
 ////load light intensity file for each cell
objref lightinten_file
objref lightinten_rec
lightinten_file = new File()
lightinten_file.ropen("./input/cell_inten.txt")
lightinten_rec = new Vector()
lightinten_rec.scanf(lightinten_file)

objref opto_syn[TotalCellNum],opto_con[TotalCellNum]

for j = 0, opto_rec.size()-1{
    m=opto_rec.x[j]
    //dis=sqrt((elec_single.x[0]-Location.x[m][0])^2+(elec_single.x[1]-Location.x[m][1])^2+(elec_single.x[2]-Location.x[m][2])^2)   ///calculate dis to electrode
	if(!pc.gid_exists(m)) { continue }				// Can't connect to target if it doesn't exist 
													// on the node ("continue") skips rest of code
		cellid = pc.gid2cell(m)                     	// get GID object from ID
		cellid.soma opto_syn[m] = new ChR2_william_event(0.5)

        if (m<CellNum_p) { ////PN
        opto_syn[m].nPulses=1
        opto_syn[m].Dt_on=2
        opto_syn[m].Dt_off=1/10*1000-5
        opto_syn[m].gmax=0.05//0.04
        opto_syn[m].tauChR2=0.4
        opto_syn[m].Gd1=0.25
        opto_syn[m].Gd2=0.5
        }else {   ////interneuron
        opto_syn[m].nPulses=1
        opto_syn[m].Dt_on=2
        opto_syn[m].Dt_off=1/10*1000-5
        opto_syn[m].gmax=0.15//0.04
        opto_syn[m].tauChR2=0.4
        opto_syn[m].Gd1=0.25
        opto_syn[m].Gd2=0.5
        }
        opto_syn[m].light_intensity=lightinten_rec.x[m]

        /*if (dis<200) {     ///set light intensity
        opto_syn[m].light_intensity=5
          } else if (dis>=200&&dis<500) {
        opto_syn[m].light_intensity=3  
          } else if (dis>=500&&dis<800) {
         opto_syn[m].light_intensity=1  
          } else {
          opto_syn[m].light_intensity=0.5
          }
          */
        
        opto_con[m] = new NetCon(nil,opto_syn[m],0,0,1) 
                             
        }
        

////load several files for connection/////
//strdef E2E_syn_str,I2I_syn_str,I2P_syn_str,P2I_syn_str,GAP_syn_str
//strdef PP_size_str,II_size_str,IP_size_str,PI_size_str,GAP_size_str
strdef GAP_syn_str,GAP_size_str
//strdef E2E_wgt_str,I2I_wgt_str,I2P_wgt_str,P2I_wgt_str
//strdef E2E_del_str,I2I_del_str,I2P_del_str,P2I_del_str

strdef syn_str,syn_ind_str
sprint(syn_str,"./input/active_syn_op")
sprint(syn_ind_str,"./input/active_syn_ind")

objref syn_connect_file,syn_ind_file
syn_connect_file=new File()
syn_ind_file=new File()
syn_connect_file.ropen(syn_str)
syn_ind_file.ropen(syn_ind_str)

objref syn_connect,syn_ind
syn_connect=new Vector()
syn_ind=new Vector()
syn_connect.scanf(syn_connect_file)
syn_ind.scanf(syn_ind_file)



objref saveM
saveM = new File()

if(pc.id==0){     //"wopen" once by node 0 to clear the contents of the file
saveM.wopen("Matrix_NEW")
saveM.close()
}

{load_file("function_ConnectTwoCells.hoc")}
{load_file("function_ConnectInternal_simplify_online_op.hoc")}
Location.muls(1e-3)
for rank=0, pc.nhost-1 { // host 0 first, then 1, 2, etc.
		if (rank==pc.id) {
		//saveM.aopen("Matrix_NEW")
ConnectInternal()

}
pc.barrier()
}
Location.muls(1e3)

//////voltage record by Feng////////////////////////////////////////////////////////////////////////////
objref Volrec[TotalCellNum], vollist
vollist = new List()

proc RecVol() {  local i
for i=0,op_rec.size()-1{
op = op_rec.x[i]
if(pc.gid_exists(op)){
cellid = pc.gid2cell(op)
Volrec[op] = new Vector()
Volrec[op].record(&cellid.soma.v(0.5),1)
vollist.append(Volrec[op])
}
}
}
//RecVol()

objref tvec, idvec 										// will be Vectors that record all spike times (tvec)
														// and the corresponding id numbers of the cells that spiked (idvec)
proc spikerecord() {local i localobj nc, nil

	tvec = new Vector()
	idvec = new Vector()
	for i=0, cells.count-1 {
	  nc = cells.object(i).connect2target(nil)
	  nc.record(tvec, idvec, nc.srcgid)
														// the Vector will continue to record spike times even after the NetCon has been destroyed
	}
}

spikerecord()

/////record input////
objref f_Bg
strdef Input

proc recinput() {
for i = 0,CellNum_p-1 {
if(!pc.gid_exists(i)) { continue }
cellid = pc.gid2cell(i)
if (cellid.baglist.count()>0) {
for j=0,cellid.baglist.count()-1{
    f_Bg = new File()
	sprint(Input,"/data/ffeng/inputs/inputs_%d_%d",i,j)
	f_Bg.wopen(Input)
	cellid.baglist.o[j].printf(f_Bg)
	f_Bg.close()
}
}
}
}
//recinput()

///to find volt recording length
objref voltsrecording_len

root_cell_id=3
///to define length of volts automatically

objref vpn_list_percore,vi_list_percore


objref vpn_n,vi_n

proc initVoltsrecord() {
vpn_n=new Vector(1)
vi_n=new Vector(1)
voltsrecording_len=new Vector(1)
vpn_list_percore=new List()
vi_list_percore=new List()

if (pc.gid_exists(root_cell_id)) { 
cellid = pc.gid2cell(root_cell_id)
voltsrecording_len.x[0]=vollist.o[vollist.index(Volrec[root_cell_id])].size()//length of recorded LFP is dependent on simulation time and recording resolution
}
pc.barrier()
pc.allreduce(voltsrecording_len,1)
//print "xxxxx=", vollist.o[vollist.index(Volrec[root_cell_id])].size()
//for bb=0,dis_bound.size()-2 {  ///prepare for storing volts
vpn_list_percore.append(new Vector(voltsrecording_len.x[0]))
vi_list_percore.append(new Vector(voltsrecording_len.x[0]))
//}
}
objref volts_temp
proc aveVol() {
//elec_single=elec_coords.bcopy(0,0,1,3).to_vector()
for op = 0,CellNum-1 {
        if(pc.gid_exists(op)){ 
         //dis=sqrt((elec_single.x[0]-Location.x[op][0])^2+(elec_single.x[1]-Location.x[op][1])^2+(elec_single.x[2]-Location.x[op][2])^2)
          //for bb=0,dis_bound.size()-2 {
            
              //if (dis>=dis_bound.x[bb]&&dis<dis_bound.x[bb+1]) {
              volts_temp=new Vector()
              volts_temp=vollist.o[vollist.index(Volrec[op])]  ///volts vector
              //print "volts size= ", volts_temp.size()
              if (Cell_type_rec.x[op]<= 50) {///PN type
              //print "vpn_list_percore= ", vpn_list_percore.o[0].size()
              vpn_list_percore.o[0].add(volts_temp)
              vpn_n.x[0]+=1  ///record number
              } /* else if (Cell_type_rec.x[op]<= 50){///C type
              vc_list_percore.o[bb].add(volts_temp)
              vc_n.x[bb]+=1   ///record number
              } */ else { //INT type
              vi_list_percore.o[0].add(volts_temp)
              vi_n.x[0]+=1    ///record number           
              }
              
              //break  ///if found the right category, then break the loop
              
              //}
          
                  //                  }
                              }
                    }
 pc.barrier()// wait for all hosts to get to this point    
 
 pc.allreduce(vpn_n,1)
 //pc.allreduce(vc_n,1)
 pc.allreduce(vi_n,1)
 pc.barrier()// wait for all hosts to get to this point                   

   //for bb=0,dis_bound.size()-2 { ///sum-up contributions from each host to have volt
   pc.allreduce(vpn_list_percore.o[0],1) 
   //pc.allreduce(vc_list_percore.o[bb],1)
   pc.allreduce(vi_list_percore.o[0],1)

   
   vpn_list_percore.o[0].div(vpn_n.x[0])
   //vc_list_percore.o[bb].div(vc_n.x[bb])
   vi_list_percore.o[0].div(vi_n.x[0])
   
   //}
   
}
//aveVol()

objref avevolts_single_file


proc Volwrite() {
randomburst=$1
runs=$2
if (pc.id==0){
print "PN type cell = ", vpn_n.printf
print "i type cell = ", vi_n.printf

   strdef ave_volts
   sprint(ave_volts,"./volts/ave_volts_%d_%d",randomburst,runs) 
   avevolts_single_file=new File()
   avevolts_single_file.wopen(ave_volts)
   
   for i=0, vpn_list_percore.o[0].size()-1 {   ///excluding zero paddings
	avevolts_single_file.printf("%g\t%g\n", vpn_list_percore.o[0].x[i], vi_list_percore.o[0].x[i])	//first column is PN, second is for ITN
        }
   //vpn_list_percore.o[0].printf(avevolts_single_file)
   avevolts_single_file.close()
/* 
   sprint(ave_volts,"./volts/ave_volts_ITN_%d",bb) 
   avevolts_single_file=new File()
   avevolts_single_file.wopen(ave_volts)
   vi_list_percore.o[0].printf(avevolts_single_file)
   avevolts_single_file.close() */
   
  //pc.barrier ()    // wait for all hosts to get to this point
  
}
}


proc precalc_conduc()  { local m,op localobj conduct_comp_PN,conduct_comp_ITN////pre calculate conductance for each cell

for (m=0; m<elec_coords.nrow();m+=1) { // calculate LFP per electrode

elec_single=elec_coords.bcopy(m,0,1,3).to_vector()
//LFP_per_core=new Vector(LFPrecording_len.x[0])    ////to record sum of LFP per core based on the same electrode
//print LFP_per_core.size()
 //print LFP_per_core.size() 
     for op = 0,CellNum-1 {
       //op = op_rec_LFP.x[j]
        if(pc.gid_exists(op)){ 
         dis=sqrt((elec_single.x[0]-Location.x[op][0])^2+(elec_single.x[1]-Location.x[op][1])^2+(elec_single.x[2]-Location.x[op][2])^2)
          //print dis
          //if (dis<=10e120)  {    //only cells within 500um of electrodes will be counted
         cellid = pc.gid2cell(op)
         Location_single=Location.bcopy(op,0,1,3).to_vector()  ///copy single cell' location info.
         oritation_single=oritation.bcopy(op,0,1,3).to_vector() ///copy single cell' oritation info.
  
        // LFP_multi[m]=new Vector(LFPrecoridng_len)
             
             conduct_comp_PN=new Vector(modelcompartment_num)
             conduct_comp_ITN=new Vector(modelcompartment_num_ITN)

             if (op<CellNum_p) {  /// for PNs               
                 
                 for (i=0; i<modelcompartment_num; i+=1) {  ///i stands for segment
                conduct_comp_PN.x[i]=calcconduc_PN(Location_single,i,oritation_single,elec_single,dis)  //i=0 for soma, 1-8 for adend, 9-15 for pdend
                                 
                    }
                 cellid.conduclist.insrt(m,conduct_comp_PN)   
                    
                } else {  /// for ITNs 
                  for (i=0; i<modelcompartment_num_ITN; i+=1) {  ///i stands for segment
                  conduct_comp_ITN.x[i]=calcconduc_ITN(Location_single,i,oritation_single,elec_single,dis)  //i=0 for soma, 1-8 for adend, 9-15 for pdend
                   

                   }
                  cellid.conduclist.insrt(m,conduct_comp_ITN)
                   
              }
               
            }
           }

}
}
precalc_conduc()


objref LFPvec,LFPvec_filtered//,vlfp
objref LFPvec_amp,lfplist_amp,LFPvec_filtered_amp                                           
lfp_dt=1  ///define time step for calculating
         // For this time step, create a vector with entries of time and average LFP
//lfplist=new List()
//LFPvec=new List()
//LFPvec_filtered=new List()

//lfplist_amp=new List()
//LFPvec_amp=new List()
//LFPvec_filtered_amp=new List()                      
load_file("function_filter&detection.hoc")

objref filtered_signal//,filtered_signal_amp

////define for detection
objref pulse,pulse_times//pulseSnip,
t_window=100/lfp_dt  ////time moving window for detection
pulse_window=10  /////to make sure pulse interval is greater than pulse_window


proc initLFPvec () {   ////initilize LFP,pulses-related vec
pulse_times=new Vector() ///to store real time of pulse at each LFP step
pulse=new Vector(pulse_window+1)  ///to store pulse logic at each LFP step

if (pc.id==0) {
 //print filtered_signal.size()
 //for (m=0; m<elec_coords.nrow();m+=1) {
  ////for phase detection 
LFPvec=new List()
LFPvec_filtered=new List()
  
 for i=0,2*filter_order-1 {
 filtered_signal=new Vector(elec_coords.nrow())  //tstop+1+2*filter_order
 //filtered_signal.x[0]=append(0)   ////fill in zeros
 LFPvec.append(filtered_signal)
 LFPvec_filtered.append(filtered_signal)
 }
  ////for amp detection
 /*for i=0,2*filter_order_amp-1 {
 filtered_signal_amp=new Vector(elec_coords.nrow())  //tstop+1+2*filter_order
 //filtered_signal.x[0]=append(0)   ////fill in zeros
 LFPvec_amp.append(filtered_signal_amp)
 LFPvec_filtered_amp.append(filtered_signal)
 }
  */                   
 //}
}
pc.barrier()
}



//pulseSnip=new Vector() ///snippet of pulse within pulse interval window

//random_f=20 //Hz, define random pulses freq
proc calc_LFP() { local pulse_num_desire,detect_phase_type,event_random_val localobj vlfp 
pulse_num_desire=$1
detect_phase_type=$2
event_random_val=$3

vlfp=new Vector(elec_coords.nrow())  

for (m=0; m<elec_coords.nrow();m+=1) { // calculate LFP per electrode
     //vlfp.x[m] = 0 // Initialize the LFP variable
     
for op = 0,CellNum-1 {
       //op = op_rec_LFP.x[j]
        if (pc.gid_exists(op)) { 
        cellid = pc.gid2cell(op)
        //access cellid.soma
         j=0
        forsec cellid.all {
        
         if (ismembrane("extracellular")){
     
               //print secname()
            for (x,0) {
			vlfp.x[m] = vlfp.x[m] + (er_xtraimemrec(x) * cellid.conduclist.o(m).x[j])
            //print x,secname(),j//cellid.conduclist.o(m).x[j],
            //print er_xtraimemrec(x)
			j = j + 1        
                      }
                }    
                              }
                       }
                                       }
                                       }
 
 pc.barrier()
 pc.allreduce(vlfp,1) 
 
 if (pc.id==0) {
 //LFPvec = new List()
               //access cell_3.dend
               //print secname()
//return vlfp
  LFPvec.append(vlfp)
  //LFPvec_amp.append(vlfp)
  filtered_signal=new Vector(elec_coords.nrow())
  //filtered_signal_amp=new Vector(elec_coords.nrow())
 for (mm=0; mm<elec_coords.nrow();mm+=1) {
  filtered_signal.x[mm]=filter_realtime(LFPvec,LFPvec_filtered,filter_order,mm) 
  //filtered_signal_amp.x[mm]=filter_realtime_amp(LFPvec_amp,LFPvec_filtered_amp,filter_order_amp,mm) 
                                          }
  //filtered_signal.printf
  LFPvec_filtered.append(filtered_signal)
  //LFPvec_filtered_amp.append(filtered_signal_amp)
  }
  pc.barrier()
//lfplist.append(LFPvec.c)  
//LFPvec.printf

//cvode_active(1)

/////for detection//////
   
if (pc.id==0&&t>=t_window*lfp_dt+1) {
//pulseSnip=pulse.at((pulse.size()-1-pulse_window),pulse.size()-1)
//if (pulseSnip.sum()>=1) {    // check if a pulse has been delivered within the last 10 ms, and if so, don't generate a new pulse
        //pulse.append(0) 
    //} else {

    //print "hello"
    if (pulse_num_desire>0&&pulse_num<1) {///no pulses needed if desire is 0
        if (detect_phase_type<3) {
        trigerNow=detect(LFPvec_filtered,t_window,thres=0.04,type=detect_phase_type,electro_seq=0,sigv=1)   ///type 1 trough, 2 peak
        } else {
        trigerNow=detect(LFPvec_filtered,t_window,thres=0.04,type=1,electro_seq=0,sigv=1)   ///for random pulses, just use trough as references
        }
        
    //pulse.append(trigerNow)
    if (trigerNow>0&&t>_triggertime) {
    pulse_num=pulse_num+1   ///count how many pulses generated so far
    //if (pulse_num<=pulse_num_desire){
    pulse_times.append(t+event_random_val)
    //pulse_times.floor()
    //}
    }
    //} else if (pulse_num_desire>0&&pulse_num>=1) {  ///for other pulses, no threshold requirement
    //trigerNow=detect(LFPvec_filtered,t_window,thres=0,type=detect_phase_type,electro_seq=0,sigv=1)   ///type 1 trough, 2 peak
    //pulse.append(trigerNow)
    //if (trigerNow>0&&t>500) {
    //pulse_num=pulse_num+1   ///count how many pulses generated so far
    //if (pulse_num<=pulse_num_desire){
    //pulse_times.append(t)
    //}
    
    //}
    
    }
}
//}


pc.broadcast(pulse_times,0)   ///broadcast pulsetime to all host
pc.barrier()
 
if (pulse_times.size()>0) {
//if (pc.id==1) {
//print 	"pulsetimes on id1: ", pulse_times.printf
//}
 if (pulse_times.x[pulse_times.size()-1]>=t) {
for j = 0, opto_rec.size()-1{
       m=opto_rec.x[j]
	if(!pc.gid_exists(m)) { continue }
     //print 	"pulsetimes: ", pulse_times.x[pulse_times.size()-1]
     //print "t ", t
    opto_con[m].event(pulse_times.x[pulse_times.size()-1])
    //bg2LAcon[m].active(0)
    //print "PCID: ", pc.id
    //print "m: ", m
    

    
}
}
   
 ////turn off sources////

/*if (t>=pulse_times.x[pulse_times.size()-1]) {
     //print "t= ", t
   objref fluc[TotalCellNum][2] ////turn off bg noise
   //objref bg2LAcon[TotalCellNum]
   for mmm = 0, TotalCellNum-1{
      pc.barrier()
      if(!pc.gid_exists(mmm)) { continue }
      bg2LAcon[mmm].active(0) ////turn off Poisson afferents
      //print "mmm= ",mmm
     }
}
*/
}
pc.barrier()

cvode.event(t + lfp_dt, "calc_LFP(pulse_num_desire,detect_phase_type,event_random_val)")		

}


    
//calc_LFP()

///calculate LFP real-time////
objref fih2,LFP_allruns,LFP_filtered_allruns,pulse_file
LFP_allruns=new List()  ///store all LFPs during different runs
LFP_filtered_allruns= new List() ///store all LFPs during different runs

if(pc.id==0){     //open write files on host 0
   strdef pulse_time
   sprint(pulse_time,"./pulse/pulsetime_combine_cellassembly") 
   pulse_file=new File()
   pulse_file.wopen(pulse_time)
   } ///to save generated pulses in different situation

  proc pulsewrite() {local randomburst,randnum localobj pulse_file
  pulse_file=$o1
  randomburst=$2
  randnum=$3
  //detec_type=$4
  
  if(pc.id==0){     //open write files on host 0
    /*strdef pulse_time
   sprint(pulse_time,"./pulse/pulsetime_combine") 
   pulse_file=new File()
   pulse_file.wopen(pulse_time)*/
   pulse_file.printf("%g\t",randomburst) ///put pulse num first
   pulse_file.printf("%g\t",randnum) ///put pulse num second
   //pulse_file.printf("%g\t",detec_type) ///put detect type third
   if (pulse_times.size()==0) {
   
   pulse_file.printf("%g\t\n",-tstop) ///fill in negative pulse if no pulses evoked
   } else {
   pulse_times.printf(pulse_file,"%g\t")}

 
        
   //pulse_file.close()
   }
   
  }   

 cycle_val=1000/40  ///use this variable to evaluate longest cycle

// PROCEDURE TO SEND SPIKES TO A FILE "SPIKERASTER"--------
objref spikefile
strdef cmd
proc spikefileout_partial() { local i, rank localobj spikefile
pc.barrier() // wait for all hosts to get to this point
spikefile=$o1
for rank=0, pc.nhost-1 { // host 0 first, then 1, 2, etc.

if (rank==pc.id) {
for i=0, tvec.size-1 {

spikefile.aopen()    //"aopen" to append data
if (pulse_times.size()>0) {
        if (pulse_times.x[pulse_times.size()-1]>0&&tvec.x[i]>=pulse_times.x[pulse_times.size()-1]-cycle_val&&tvec.x[i]<=pulse_times.x[pulse_times.size()-1]+cycle_val) {
        spikefile.printf("%8.4f\t %d\n", tvec.x[i], idvec.x[i])
        } else if (pulse_times.x[pulse_times.size()-1]<0) {
        spikefile.printf("%8.4f\t %d\n", tvec.x[i], idvec.x[i])}

} else if (pulse_times.size()==0){
spikefile.printf("%8.4f\t %d\n", tvec.x[i], idvec.x[i])
 
}
spikefile.close()
}
}
pc.barrier() // wait for all hosts to get to this point
}
}

proc spikefileout_all() { local i, rank localobj spikefile
pc.barrier() // wait for all hosts to get to this point
spikefile=$o1
for rank=0, pc.nhost-1 { // host 0 first, then 1, 2, etc.

if (rank==pc.id) {
for i=0, tvec.size-1 {
spikefile.aopen()    //"aopen" to append data
spikefile.printf("%8.4f\t %d\n", tvec.x[i], idvec.x[i])
spikefile.close()
}
}
pc.barrier() // wait for all hosts to get to this point
}
}

proc spkcollect() { localobj f ///to save/collect spks
randomburst=$1
runs=$2
sprint(cmd,"./spkresults/spkraster_%g_%g.dat",randomburst,runs)
f = new File(cmd)

if(pc.id==0){
    f.wopen()
    f.close()
    }
	spikefileout_all(f)	
}


objref outburstID
outburstID=new Vector()
objref random_t                 
proc rrun(){									// Run the network simulation and write out the results
                                
for randomburst=0, randomburst_num-1 {
//randomburst=1
for runs=0,runnum-1 {
//v_init=-70

objref noiseRandObj[TotalCellNum][2]

objref rc_Poisson2E,noise_stim[TotalCellNum],noise_random[TotalCellNum]
objref bg2LAsyn[TotalCellNum],bg2LAcon[TotalCellNum]


  //,detect_phase_type_num {  ///type 1 trough, 2 peak
    ////random part
    bg_input_PN(randomburst*1000+12000)
    Poi_input_PN(randomburst*1000+12000)
    bg_input_ITN(randomburst*1000+12000)
    Poi_input_ITN(randomburst*1000+12000)
    
    RecVol()
    ////////
    initLFPvec() ///initilize LFP-related vect for each run
    pulse_num=0  ///count pulse number generated
     ////////
     if (detect_phase_type==3) {random_t=new Random(randomburst+12000)}///just for random type
   if (runs==0&&detect_phase_type<3) {
   event_random_val=-tstop ///for control, to make no pulses delivered
   } else if (runs==0&&detect_phase_type==3) {
   event_random_val=random_t.discunif(0,cycle_val)-tstop ///for control, to make no pulses delivered
   } else if (runs==1&&detect_phase_type<3){
   event_random_val=0
   } else if (runs==1&&detect_phase_type==3){ 
   event_random_val=random_t.discunif(0,cycle_val)
          //print "event_random= ", event_random_val
   }
   
   fih2 = new FInitializeHandler("calc_LFP(pulse_num_desire,detect_phase_type,event_random_val)")
   {pc.set_maxstep(10)}
   pc.barrier()
    stdinit()
    pc.barrier()
    pc.psolve(tstop)  // Equivalent to calling cvode.solve(tstop) but for parallel NEURON;
    
    if ((runs==0)&&(pulse_times.size()>0)) { ///skip if not meeting cycle criteario, but still run for control case
     if (pulse_times.x[pulse_times.size()-1]+tstop>tstop-2*cycle_val) {  //if pulse is too close to tstop, then directly go to next burst
     if (pc.id==0) {
     outburstID.append(randomburst+runs*randomburst_num)//record criterio-passed burst ID
     LFP_allruns.append(LFPvec)
     LFP_filtered_allruns.append(LFPvec_filtered)
     pulsewrite(pulse_file,randomburst,runs)
     }
     spkcollect(randomburst,runs) ///to save/collect spks
     pc.barrier()
     break
     } 
     
     } else if ((runs==0)&&(pulse_times.size()==0)) {  ///skip if no pulses, but only run for control case
     if (pc.id==0) {
     outburstID.append(randomburst+runs*randomburst_num) ///record criterio-passed burst ID
     LFP_allruns.append(LFPvec)
     LFP_filtered_allruns.append(LFPvec_filtered)
     pulsewrite(pulse_file,randomburst,runs)
     
     }
      
     spkcollect(randomburst,runs) ///to save/collect spks
     pc.barrier()
      break 
     }
     
    if (pc.id==0) {
    outburstID.append(randomburst+runs*randomburst_num)//record criterio-passed burst ID
    LFP_allruns.append(LFPvec)
    LFP_filtered_allruns.append(LFPvec_filtered)
    pulsewrite(pulse_file,randomburst,runs)
    
    }
    spkcollect(randomburst,runs) ///to save/collect spks
    initVoltsrecord()
    aveVol()
    Volwrite(randomburst,runs)
    }
    }
    }    
    //}
   
rrun()

if (pc.id==0) {
pulse_file.close()
}

proc LFPwrite() {localobj LFP_single_file,LFP_filter_file,LFP_filter_amp_file,lfpvec,lfpvec_filter//,lfpvec_filter_amp

 if(pc.id==0){     //open write files on host 0
    
   strdef LFPs,LFPs_filter,LFPs_filter_amp
   sprint(LFPs,"%s","./LFPs/LFP_elec_combine_cellassembly") 
   sprint(LFPs_filter,"%s","./LFPs/LFP_elec_combine_filter_cellassembly")
   //sprint(LFPs_filter_amp,"./LFPs/LFP_elec_combine_filter_amp")
   k=0   ///to LFP count list

   LFP_single_file=new File()
   LFP_single_file.wopen(LFPs)
   
   LFP_filter_file=new File()
   LFP_filter_file.wopen(LFPs_filter)
   print "outburstID= ", outburstID.printf
for randomburst=0, randomburst_num-1 {
//randomburst=1
for randrun=0,runnum-1 {

if (outburstID.contains(randomburst+randrun*randomburst_num)) { ///in burst is contained in the final burst
  
  //for detect_phase_type=1,1 {
  
   //LFP_single_file.printf("%g\n",pulse_num_desire)  ///put number of desire pulse
   //LFP_filter_file.printf("%g\n",pulse_num_desire)  ///put number of desire pulse
   
   LFP_single_file.printf("%g\n",randomburst)  ///put number of burst seq
   LFP_filter_file.printf("%g\n",randomburst)  ///put number of burst seq                                                                                                
   LFP_single_file.printf("%g\n",randrun)  ///put number of random runs
   LFP_filter_file.printf("%g\n",randrun)  ///put number of random runs
   
   //LFP_single_file.printf("%g\n",detect_phase_type)  ///put detect_phase_type
   //LFP_filter_file.printf("%g\n",detect_phase_type)  ///put detect_phase_type
   
    for i=2*filter_order, LFPvec.count()-1 {   ///excluding zero paddings       
        lfpvec = LFP_allruns.o(k).o(i)
        lfpvec.printf(LFP_single_file,"%g\t")
        
        lfpvec_filter=LFP_filtered_allruns.o(k).o(i)
        lfpvec_filter.printf(LFP_filter_file,"%g\t")
                                            }
       k=k+1  ///to count LFP list
    }
    
    }
    
    }                      
   LFP_single_file.close()
   LFP_filter_file.close()    
}
//}

    
   //for i=2*filter_order_amp, LFPvec_amp.count()-1 {   ///excluding zero paddings
                
        //lfpvec_filter_amp=LFPvec_filtered_amp.o(i)
        //lfpvec_filter_amp.printf(LFP_filter_amp_file,"%g")
        
    //}
        

   }
   
  //} 
  
  LFPwrite()
  
  // PROCEDURE TO SEND SPIKES TO A FILE "SPIKERASTER"--------
/* objref spikefile

spikefile = new File("data")

if(pc.id==0){     //"wopen" once by node 0 to clear the contents of the file
spikefile.wopen()
spikefile.close()
}


proc spikefileout() { local i, rank
pc.barrier() // wait for all hosts to get to this point

for rank=0, pc.nhost-1 { // host 0 first, then 1, 2, etc.
if (rank==pc.id) {

for i=0, tvec.size-1 {
spikefile.aopen()                               //"aopen" to append data
spikefile.printf("%8.4f\t %d\n", tvec.x[i], idvec.x[i])

spikefile.close()
}
}
pc.barrier() // wait for all hosts to get to this point
}
}
spikefileout() */


{pc.runworker()}
{pc.done()}