//################################################################//
//# GUI Built using BMTools (https://github.com/tjbanks/bmtools) #//
//# Tyler Banks (tyler@tylerbanks.net)                           #//
//# Neural Engineering Laboratory (Prof. Satish Nair)            #//
//# University of Missouri, Columbia                             #//
//# Build time: 08/05/2020 21:07:55                              #//
//################################################################//

{load_file("stdrun.hoc")}
{load_file("nrngui.hoc")}

//Loading mechanisms in other folder
nrn_load_dll("../../components/mechanisms/x86_64/.libs/libnrnmech.so")
nrn_load_dll("../../components/mechanisms/nrnmech.dll")

// Load Template(s) (some may not be needed if a folder was specified and may cause problems, remove as needed)
//{load_file("./components/templates/Feng_PVbasketcell.hoc")}
//{load_file("./components/templates/spwr_templates.hoc")}
{load_file("../../components/templates/feng.hoc")}
{load_file("../../source_material/FengEtAl2019/interneuron_template_gj_LFP_Iinject_recordingimembrane.hoc")}

tstop = 1000
v_init = -65
objref Cell,FengCell // declare the primary cell object
//Cell = new Cell_C() // build the neuron from template
Cell = new InterneuronCellf()//feng_typeC()
FengCell = new InterneuronCell()//FENG'S ORIGINAL

NumClamps = 0
NumStims = 1
NumNetcons = 2
NumSynapses = 2
NumOtherCells = 0
NumVClamps = 1

//objref ccl[NumClamps]
objref stim[NumStims]
objref nc[NumNetcons]
objref syn[NumSynapses]
//objref auxcell[NumOtherCells]
objref vclamp[NumVClamps]


//netstim for synapse
stim[0]=new NetStim(0.5)
stim[0].interval=50 // ms (mean) time between spikes
stim[0].number=5 //(average) number of spikes
stim[0].start=450 // ms (most likely) start time of first spike
stim[0].noise=0.0 // range 0 to 1. Fractional randomness.

Cell.dend[0] syn[0] = new bg2pyr(0.9)//pyrD2pyrD_STFD(0.9)
syn[0].initW = 2

FengCell.dend syn[1] = new bg2pyr(0.9)//pyrD2pyrD_STFD(0.9)
syn[1].initW = 2

delay = 1

nc[0] = new NetCon(stim[0],syn[0],0,delay,1)
nc[1] = new NetCon(stim[0],syn[1],0,delay,1)

//Cell.soma vclamp[0] = new SEClamp(0.5)
//vclamp[0].apmp1 = v_init
//vclamp[0].dur1 = 9999

strdef tstr0, tstr1,tstr2,tstr3

//Window 1 variables
strdef Window1BoxTitle
Window1SubVBoxNum = 3
objref Window1HBoxObj,Window1SubVBoxObj[Window1SubVBoxNum]


proc DisplayWindow1() { local i

    Window1BoxTitle = "Interneuron Cell - Cell Configurator - Interface generated by BMTools (https://github.com/tjbanks/bmtools)"
    Window1HBoxObj = new HBox()
    for i=0,Window1SubVBoxNum-1 Window1SubVBoxObj[i] = new VBox()

    // Column1
    Window1SubVBoxObj[0].intercept(1)
        // Widget1
        newPlot(0,250,-80,50)
        graphItem.save_name("graphList[0].")
        graphList[0].append(graphItem)
        sprint(tstr1,"%s.soma[0].v(0.5)","Cell")
        graphItem.addexpr(tstr1,1,1)
        
        // Widget2
        newPlot(0,250,-80,50)
        graphItem.save_name("graphList[0].")
        graphList[0].append(graphItem)
        sprint(tstr1,"%s.soma.v(0.5)","FengCell")
        graphItem.addexpr(tstr1,1,1)
        
    Window1SubVBoxObj[0].intercept(0)

    // Column2
    Window1SubVBoxObj[1].intercept(1)
        // Widget1
        Cell.soma[0] nrnsecmenu(0.5,1)
        // Widget2
        Cell.dend[0] nrnsecmenu(0.5,1)
        // Widget3
        //Cell.apic[0] nrnsecmenu(0.5,1)
    Window1SubVBoxObj[1].intercept(0)

    // Column3
    Window1SubVBoxObj[2].intercept(1)
        // Widget1
        nrncontrolmenu()
        // Widget2
        nrnpointmenu(syn[0])
        // Widget3
        nrnpointmenu(stim[0])
    Window1SubVBoxObj[2].intercept(0)

    Window1HBoxObj.intercept(1)
        for i=0,Window1SubVBoxNum-1 Window1SubVBoxObj[i].map()
    Window1HBoxObj.intercept(0)
    Window1HBoxObj.map(Window1BoxTitle,0,0,1100,600)

}// end DisplayWindow1()

objref noise_exc, noise_inh, cclA
objref noiseRandObj_exc, noiseRandObj_inh

////////////////////// Single-Point BACKGROUNG noise OR PYRAMIDAL CELLS //////////////////////
///for exc noise/////////////
                        noiseRandObj_exc=new Random()
                        noiseRandObj_exc.Random123(123)
                        noiseRandObj_exc.normal(0,1)

                        FengCell.soma noise_exc = new Gfluct2_exc(0.5)

                        noise_exc.g_e0 = 0.00121
                        noise_exc.g_i0 = 0
                        noise_exc.std_e = 0.00012
                        noise_exc.std_i = 0

                        //noise_exc.g_e0 = 0.0032//0.0032
                        //noise_exc.std_e = 0.003//0.003
                        noise_exc.setRandObj(noiseRandObj_exc)

                        noiseRandObj_inh=new Random()
                        noiseRandObj_inh.Random123(123)
                        noiseRandObj_inh.normal(0,1)

                        FengCell.soma noise_inh = new Gfluct2_inh(0.5)

                        noise_inh.g_e0 = 0
                        noise_inh.g_i0 = 0.00573
                        noise_inh.std_e = 0
                        noise_inh.std_i = 0.00264

                        //noise_inh.g_e0 = 0.021
                        //noise_inh.std_e = 0.008
                        noise_inh.setRandObj(noiseRandObj_inh)

Cell.insert_mechs(123)
DisplayWindow1()
